PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'age (6 or 12)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = daisy-pine
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent left
      image = $x["left"]
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent right
      image = $x["right"]
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Code
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        from autopsypy import AutoPsyPy
        x = AutoPsyPy()
      End Experiment:
        x.finish()
Flow
  Routine Code
  Routine trial
